<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q6="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BackgroundSubtraction">
          <q1:BackgroundFrames>50</q1:BackgroundFrames>
          <q1:AdaptationRate>0.01</q1:AdaptationRate>
          <q1:ThresholdValue>18</q1:ThresholdValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
          <q1:SubtractionMethod>Dark</q1:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>9</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ToList" />
      </Expression>
      <Expression xsi:type="Equal" />
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item3</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="WorkflowPropertyOfInt64">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT0S</DueTime>
          <Period>PT2S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawArrays">
          <q2:ShaderName>Particles</q2:ShaderName>
          <q2:DrawMode>Points</q2:DrawMode>
          <q2:Usage>DynamicDraw</q2:Usage>
          <q2:VertexAttributes>
            <q2:VertexAttributeMapping>
              <q2:Size>3</q2:Size>
              <q2:Normalized>false</q2:Normalized>
              <q2:Type>Float</q2:Type>
            </q2:VertexAttributeMapping>
          </q2:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>1000</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowPropertyOfKeys">
          <Value>A</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>import clr
clr.AddReference("OpenTK")
clr.AddReference("OpenCV.Net")
from System.Collections.Generic import IList
from OpenCV.Net import CV, Point2f, Mat,Depth
import traceback
from OpenTK import Vector2, Vector3
from System import Array, Single, Random,Tuple


dlOld=[]
dl=[]

@returns(Tuple[str,str])
def process(value):
  global dlOld,dl
  allwells=[]
  detected=value.Item1
  projected=value.Item2

  ppl=[0,2,6,8]

  pl=[]
  boxWidth=(projected[0].Item3/2)

  for p in ppl:
    x=projected[p].Item1+boxWidth
    y=projected[p].Item2+boxWidth
    ds=3/5.
    dsh=2000/5.
    
    x=x*ds+dsh
    y=y#*ds+dsh
    #print p,x,y
    pl.append([x,y])
    

  try:

    dpl=[0,1,2,3]
    
    dlOld=dl
    dl=[]
    for d in dpl:
      x=detected[d].Centroid.X
      y=detected[d].Centroid.Y
      dl.append([int(x),int(y)])

  except:
    dl=dlOld
    print traceback.format_exc()
    #print 'hello'
      

  try:
    for i in dpl:
      welldata = (pl[i][0],pl[i][1],dl[i][0],dl[i][1])
      wellstr = "%i %i %i %i" % welldata
      allwells.append(wellstr)
    
  except:
    allwells=""

  v=" ".join(allwells)
  sAll=[]
  try:
    a=[int(x) for x in v.split()]
    b=Array[Point2f]([Point2f(a[0],a[1]),Point2f(a[4],a[5]),Point2f(a[8],a[9]),Point2f(a[12],a[13])])
    c=Array[Point2f]([Point2f(a[2],a[3]),Point2f(a[6],a[7]),Point2f(a[10],a[11]),Point2f(a[14],a[15])])
    values = Array[float]([1,1,1,1,1,1,1,1,1])

    h = Mat.FromArray(values, 3, 3, Depth.F64, 1)

    CV.GetPerspectiveTransform(c,b,h)

    
    for i in range(3):
      for j in range(3):
        va=float(h.Item[i*3+j].Val0)
        da=(va)
        s = "%0.8f" % da
        sAll.append(s) 
  except:
    pass
  return Tuple.Create(" ".join(sAll),v)
  #except:
   # return ""
</q3:Script>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector2, Vector3
from System import Array, Tuple
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

def transf(x,y,s):
  values = Array[float]([float(el) for el in s.split()])

  h = Mat.FromArray(values, 3, 3, Depth.F64, 1)

  values1 = Array[float]([x,y])
  values2 = Array[float]([1,1])

  point = Mat.FromArray(values1, 1, 1, Depth.F64,2)
  out = Mat.FromArray(values2, 1, 1, Depth.F64,2)

  CV.PerspectiveTransform(point,out,h)

  x=out.Item[0].Val0
  y=out.Item[0].Val1

  return x,y


@returns(Array[Vector3])
def process(value):

  allwells=[]

  wellList=[0,2,6,8]
  posList=[]

  xMax,yMax=float(value.Item5.Width),float(value.Item5.Height)

  for w in wellList:
    well=value.Item1[w]


    x = (well.Item1+well.Item3/2.)
    y = (well.Item2+well.Item3/2.)
    ds=3/5.
    dsh=2000/5.
    xtr=x*ds+dsh
    ytr=y#*ds+dsh

    allwells.append(Vector3((2*xtr-xMax)/xMax,(-2*ytr+yMax)/yMax,25))

    s=value.Item4
    if len(s)&gt;1:
      xt,yt=transf(x,y,s)
      allwells.append(Vector3((2*xt-xMax)/xMax,(-2*yt+yMax)/yMax,5))

    

  ar=Array[Vector3](allwells)
  return ar</q3:Script>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Value</MemberName>
        <Name>Value</Name>
        <Value>false</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:TextWriter">
          <q4:FileName>E:\00_bonsai_ffmpeg_out\calibrationOut.csv</q4:FileName>
          <q4:Suffix>Timestamp</q4:Suffix>
          <q4:Buffered>true</q4:Buffered>
          <q4:Overwrite>false</q4:Overwrite>
          <q4:Append>false</q4:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:KeyDown">
          <q5:Filter>A</q5:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Name>SortContours</q3:Name>
        <q3:Script>import clr
clr.AddReference("Bonsai.Vision")
from Bonsai.Vision import ConnectedComponent
from System.Collections.Generic import IList
from System import Tuple

@returns(IList[ConnectedComponent])

def process(value):

  tupRoundAll=[]
  for c in value:

    y=c.Centroid.Y
    yr=(int(y/400)*400)
    x=c.Centroid.X
    xr=(int(x/400)*400)
    
    tupRoundAll.append((yr,xr))
  
  so=[i[0] for i in sorted(enumerate(tupRoundAll), key=lambda x:x[1])]

  s=[value[i] for i in so]

  return s</q3:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:FlyCapture">
          <q6:Index>0</q6:Index>
          <q6:ColorFormat>Bgr</q6:ColorFormat>
          <q6:ColorProcessing>Default</q6:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Size</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>imSize</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>imSize</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>select ROI file</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q4:CsvReader">
              <q4:FileName>E:\00_bonsai_ffmpeg_out\ROIdef2017-11-21T09_41_31.csv</q4:FileName>
              <q4:ScanPattern>%i %i %i %i %i %i</q4:ScanPattern>
              <q4:SkipRows>0</q4:SkipRows>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedPropertyOfStringCsvReader">
              <MemberName>FileName</MemberName>
              <Name>FileName</Name>
              <Value>E:\00_bonsai_ffmpeg_out\ROIdef2018-02-05T10_19_07.csv</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>7</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>16</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>12</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>12</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>23</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>12</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>12</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BackgroundSubtraction, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ToList, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ModBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Int64, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawArrays, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Windows.Forms.Keys, System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Boolean, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.TextWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvReader, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>