<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BackgroundSubtraction">
          <q1:BackgroundFrames>120</q1:BackgroundFrames>
          <q1:AdaptationRate>0.001</q1:AdaptationRate>
          <q1:ThresholdValue>0</q1:ThresholdValue>
          <q1:ThresholdType>ToZero</q1:ThresholdType>
          <q1:SubtractionMethod>Dark</q1:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>18</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HoughCircles">
          <q1:AccumulatorFactor>6</q1:AccumulatorFactor>
          <q1:MinDistance>600</q1:MinDistance>
          <q1:Param1>50</q1:Param1>
          <q1:Param2>100</q1:Param2>
          <q1:MinRadius>300</q1:MinRadius>
          <q1:MaxRadius>330</q1:MaxRadius>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Value</MemberName>
        <Name>Value</Name>
        <Value>false</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:RunningAverage">
          <q2:Alpha>0.05</q2:Alpha>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>A</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ToList" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>9</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="q4:PythonTransform">
              <q4:Script>from System import Tuple
@returns(Tuple[int,int,int,int,int,int])
def process(value):

  xc= int(value.Center.X)
  yc= int(value.Center.Y)
  r = int(value.Radius)
  x = xc-(r+2)
  y = yc-(r+2)
  wh=(r+2)*2

  return Tuple.Create(x,y,wh,xc,yc,r)</q4:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Concat" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedPropertyOfInt32Take">
              <MemberName>Count</MemberName>
              <Name>Count</Name>
              <Value>15</Value>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Length</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowPropertyOfKeys">
          <Value>A</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:TextWriter">
          <q5:FileName>E:\00_bonsai_ffmpeg_out\ROIdef.csv</q5:FileName>
          <q5:Suffix>Timestamp</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:Append>true</q5:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Script>import clr
from System import Array, Single, Random,Tuple

@returns(str)
def process(value):
  allwells=[]

  x = value.Item1
  y=value.Item2
  wh=value.Item3
  xc=value.Item4
  yc=value.Item5
  r=value.Item6

  welldata = (x, y, wh,xc,yc,r)
  wellstr = "%i %i %i %i %i %i" % welldata
  allwells.append(wellstr)
  return " ".join(allwells)</q4:Script>
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Script>from System import Tuple
from System.Collections.Generic import IList

@returns(IList[Tuple[int,int,int,int,int,int]])
def process(value):

  tupAll=[]
  tupRoundAll=[]
  for c in value:
    x=c.Item1
    xr=(x/100)*100
    y=c.Item2
    yr=(y/100)*100
    w=c.Item3
    xc=c.Item4
    yc=c.Item5
    r=c.Item6
    
    tupAll.append((x,y,w,xc,yc,r))
    tupRoundAll.append((yr,xr))
  
  so=[i[0] for i in sorted(enumerate(tupRoundAll), key=lambda x:x[1])]

  s=[tupAll[i] for i in so]

  return [Tuple.Create(x[0],x[1],x[2],x[3],x[4],x[5]) for x in s]</q4:Script>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="q4:PythonTransform">
              <q4:Script>from System import Tuple
@returns(Tuple[int,int])
def process(value):

  x = int(value.Item1)
  y = int(value.Item2)

  return Tuple.Create(x,y)</q4:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Concat" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:FlyCapture">
          <q6:Index>0</q6:Index>
          <q6:ColorFormat>Bgr</q6:ColorFormat>
          <q6:ColorProcessing>Default</q6:ColorProcessing>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>0</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BackgroundSubtraction, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.HoughCircles, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Boolean, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.RunningAverage, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ToList, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Concat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BitwiseNotBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Windows.Forms.Keys, System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.TextWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>