<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:uEyeCapture">
          <q2:DeviceId xsi:nil="true" />
          <q2:ConfigFile>2048x2048_30fps_4.9.ini</q2:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageWriter">
          <q1:Path>\\.\pipe\p1</q1:Path>
          <q1:Suffix>None</q1:Suffix>
          <q1:Overwrite>false</q1:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ffmpeg</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q3:PythonSource">
              <q3:Script>import datetime
@returns(str)
def generate():
  currentTime=datetime.datetime.now()
  yield currentTime.strftime('%Y%m%d%H%M%S')</q3:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>import subprocess as sp
import datetime

@returns(bool)
def process(inputs):

  vid_width=str(inputs.Item5)
  vid_height=str(inputs.Item6)
  vid_rate=str(inputs.Item1)
  currentTime=inputs.Item2
  cam_id=str(inputs.Item3)
  codec_q=str(inputs.Item4)

  cmd='c:\\ffmpeg\\bin\\ffmpeg.exe -y -f rawvideo -vcodec rawvideo -s '+vid_width+'x'+vid_height+' -r '+vid_rate+' -pix_fmt gray -i \\\\.\\pipe\\p1 -q:v '+codec_q+' -vcodec mpeg4 -vtag xvid e:\\00_bonsai_ffmpeg_out\\out_id'+cam_id+'_'+vid_rate+'fps'+'_'+currentTime+'.avi'
  sp.Popen(cmd)
  return True</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>codec q</Name>
              <Value>5</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>cam id</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>vid fps</Name>
              <Value>30</Value>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Height</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source5</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>2</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>2</To>
              <Label>Source6</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>2</To>
              <Label>Source7</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.uEye.uEyeCapture, Bonsai.uEye, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonSource, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>